/gamos/random/setSeeds 1001 1001

/gamos/verbosity GmUAVerbosity 0
/gamos/setParam GmAnalysisMgr:FileNameSuffix 6MV_F
/gamos/setParam GmGeometryFromText:FileName world.geom
/gamos/setParam GmGeometryFromText:FileNameParallel parallel_world.geom 1
/gamos/geometry GmGeometryFromText

/gamos/physicsList GmEMPhysics
/gamos/generator GmGenerator

# DEFINE SOURCE GEOMETRY
# PHASESPACE FILE INPUT
#/gamos/setParam IAEArecord:ExtraLongSize 32
#/gamos/setParam RTGeneratorPhaseSpace:FileName VarianClinaciX_6MV_1x1
#/gamos/setParam RTGeneratorPhaseSpace:InitialDisplacement 0. 0. -25.*mm
#/gamos/setParam RTGeneratorPhaseSpace:Transformations RTPS -3.14 0. 0.
#/gamos/setParam RTGeneratorPhaseSpace:MaxNReuse 1
#/gamos/setParam RTGeneratorPhaseSpace:MaxNRecycle 3
#/gamos/generator RTGeneratorPhaseSpace

/run/initialize
/gamos/physics/addPhysics tissue-optics
/gamos/physics/addPhysics cerenkov
/gamos/physics/addParallelProcess
/gamos/setParam G4OpTissueFluor:TimeProfile exponential
/gamos/setParam G4OpTissueFluor:Method interpolate
/gamos/setParam G4OpCerenkov:Method interpolate

# MANUAL SOURCE INPUT
/gamos/generator/addSingleParticleSource MySource gamma 6*MeV
/gamos/generator/energyDist MySource GmGenerDistEnergyFromFile 6MV_distribution.txt interpolate
/gamos/generator/positionDist MySource GmGenerDistPositionSquare 5*mm 0.0*mm 0.0*mm 450.0*mm 0 0 1
/gamos/generator/directionDist MySource GmGenerDistDirectionCone 0 0 -1 0.97*deg



# DEFINE DETECTORS
/gamos/filter enter_probe_filt GmEnterLogicalVolumeFilter surface_detector
/gamos/filter in_tumor_filt GmInLogicalVolumeFilter tumor_inclusion
/gamos/filter exit_tumor_filt GmExitLogicalVolumeFilter tumor_inclusion
/gamos/filter start_tumor_filt GmStartLogicalVolumeFilter tumor_inclusion
/gamos/filter opt_filt GmStringDataFilter Particle opticalphoton
/gamos/filter fluor_filt GmStringDataFilter CreatorProcess OpTissueFluor
/gamos/filter cerenkov_filt GmStringDataFilter CreatorProcess Cerenkov
/gamos/filter primary_filt GmStringDataFilter CreatorProcess Primary
/gamos/filter secondary_filt GmSecondaryFilter
/gamos/filter secondary_op_filt GmANDFilter secondary_filt fluor_filt

/gamos/filter f_detect_fl_surface GmANDFilter enter_probe_filt fluor_filt
/gamos/filter f_detect_fl_start_tumor GmANDFilter start_tumor_filt fluor_filt
/gamos/filter f_detect_fl_exit_tumor GmANDFilter exit_tumor_filt fluor_filt
/gamos/filter f_detect_parent_of_sec GmParentFilter secondary_filt
/gamos/filter f_detect_opt_parent_of_sec GmANDFilter f_detect_parent_of_sec opt_filt
/gamos/filter f_detect_opt_parent_tumor GmANDFilter f_detect_opt_parent_of_sec in_tumor_filt

/gamos/filter f_detect_cerenkov_surface GmANDFilter enter_probe_filt cerenkov_filt
/gamos/filter f_detect_cerenkov_in_tumor GmANDFilter in_tumor_filt cerenkov_filt
/gamos/filter f_detect_cerenkov_exit_tumor GmANDFilter exit_tumor_filt cerenkov_filt

/gamos/filter f_opt_in_tumor GmANDFilter opt_filt in_tumor_filt 
/gamos/filter f_primary_opt_in_tumor GmANDFilter in_tumor_filt primary_filt opt_filt
/gamos/filter f_primary_opt_exit_tumor GmANDFilter exit_tumor_filt primary_filt opt_filt
# This filter crashes GAMOS...
#/gamos/filter f_future_fl_opt_tumor GmFutureWithChildrenFilter in_tumor_filt fluor_filt 


### Primary optical fluence scorer ###
/gamos/scoring/createMFDetector detector voxel
/gamos/scoring/addScorer2MFD source_fluence_scorer GmPSTrackLengthFluence detector
/gamos/scoring/addFilter2Scorer primary_filt source_fluence_scorer
/gamos/setParam source_fluence_printer:PrintHeader TRUE
/gamos/scoring/printer source_fluence_printer GmPSPrinterCSVFile
/gamos/scoring/addPrinter2Scorer source_fluence_printer source_fluence_scorer
/gamos/setParam source_fluence_printer.csv:FileName Fluence_primary.csv
/gamos/scoring/scoreErrors source_fluence_scorer TRUE
/gamos/scoring/printByEvent source_fluence_scorer FALSE

### Cerenkov fluence scorer ###
/gamos/scoring/addScorer2MFD cerenkov_fluence_scorer GmPSTrackLengthFluence detector
/gamos/scoring/addFilter2Scorer cerenkov_filt cerenkov_fluence_scorer
/gamos/setParam cerenkov_fluence_printer:PrintHeader TRUE
/gamos/scoring/printer cerenkov_fluence_printer GmPSPrinterCSVFile
/gamos/scoring/addPrinter2Scorer cerenkov_fluence_printer cerenkov_fluence_scorer
/gamos/setParam cerenkov_fluence_printer.csv:FileName Fluence_Cerenkov.csv
/gamos/scoring/scoreErrors cerenkov_fluence_scorer TRUE
/gamos/scoring/printByEvent cerenkov_fluence_scorer TRUE

### Dose scorer ###
/gamos/scoring/addScorer2MFD dose_scorer GmG4PSDoseDeposit detector
/gamos/setParam dose_printer:PrintHeader TRUE
/gamos/scoring/printer dose_printer GmPSPrinterCSVFile
/gamos/scoring/addPrinter2Scorer dose_printer dose_scorer
/gamos/setParam dose_printer.csv:FileName Depth_Dose.csv
/gamos/scoring/scoreErrors dose_scorer TRUE
/gamos/scoring/printByEvent dose_scorer TRUE

# REPORT PROGRESS OF SIMULATION
/gamos/userAction GmCountTracksUA
/gamos/userAction GmCountProcessesUA
#/gamos/setParam GmCountTracksUA:EachNEvent 100


# RUN THE SIMULATION AND VISUALIZE
#/control/execute OGL.in
#/control/execute VRML.in
/run/beamOn 10000


